---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set psychopy_waitblanking yes
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Downloads/audiometric_testing"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	Welcome to the audiogram. In this task, press the BLUE button whenever you hear a sound. There will be some long stretches when you don't hear any sounds. Press the BLUE button to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script MainAudiometricTestingPythonScript
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run new_inline_script always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	from openexp.canvas import Canvas
	import pygame.mixer as mixer
	import random
	
	mixer.init()
	sound_file = 'C:\\Downloads\\audiometric_testing\\250Hz_44100Hz_16bit_05sec.mp3'
	mixer.music.load(sound_file)
	# print("a")
	
	# # Create a canvas object
	# my_canvas = Canvas(exp)
	
	# my_canvas.text("testing")
	
	
	# my_canvas.show()
	# print("d")
	
	
	# clock.sleep(1000)
	
	# # Import the necessary modules
	
	
	# # Initialize the mixer
	# mixer.init()
	
	# # Load the sound file
	# sound_file = 'C:\\Downloads\\audiometric_testing\\250Hz_44100Hz_16bit_05sec.mp3'
	# mixer.music.load(sound_file)
	
	# # Play the sound
	# mixer.music.play()
	# # Import the necessary modules
	# my_keyboard = Keyboard(keylist=['z', 'x'], timeout=1000)
	# start_time = clock.time()
	# key, end_time = my_keyboard.get_key()
	# var.response = key
	# var.response_time = end_time - start_time
	
	
	# my_canvas = Canvas(exp)
	
	# my_canvas.text(key)
	
	
	# my_canvas.show()
	
	# clock.sleep(1000)
	
	#This script contains the relavant OpenSesame commands
	
	#This script contains the relavant OpenSesame commands
	
	freqs = list(range(1000, 2001, 1000))
	# freqs.append(500)
	# freqs.append(250)
	scores = {}
	
	my_canvas = Canvas(exp)
	
	my_canvas.text("running prototype...")
	
	
	my_canvas.show()
	clock.sleep(1000)
	
	for freq in freqs:
	    
	    hits = {}
	    attempts = {}
	    # print(hits)
	    # print(attempts)
	    hits[0] = 0 #probably dont need these anymore
	    attempts[0] = 0
	    amp = 0
	    
	    #This starts as False because we want to first trial to count
	    new_ascending_presentation = False 
	    #When it is True, that means we just went down 10 dbs, and we
	    #dont want to count the next presentation as a hit or an attempt
	
	    prev_hit = False
	    attempts[-5] = 0
	    while (prev_hit and attempts[amp+10] < 3) or (prev_hit and attempts[amp+10] >= 3 and hits[amp+10] / attempts[amp+10] < .5) or (not prev_hit and attempts[amp-5] < 3) or (not prev_hit and attempts[amp-5] >= 3 and hits[amp-5] / attempts[amp-5] < .5):
	        prev_hit = False
	        
	        mixer.init()
	        
	        
	        sound_path = 'C:\\Downloads\\audiometric_testing\\stimuli\\'+str(freq)+'hz'+str(amp)+'db.wav'
	        # sound_file = 'C:\\Downloads\\audiometric_testing\\250Hz_44100Hz_16bit_05sec.mp3'
	        sound = mixer.Sound(sound_path)
	        # mixer.music.load(sound_file)
	        # mixer.music.play()
	        sound.play()
	        
	        my_canvas = Canvas(exp)
	        
	        my_canvas.text("Playing frequency "+str(freq)+  "hz at amplitude of " +str(amp) + "db")
	        my_canvas.show()
	        
	        
	        #wait for sound to finish playing (each should be 1 sec)
	        clock.sleep(1000)
	    
	        
	        #use key '1' instead?
	        my_keyboard = Keyboard(keylist=['5'], timeout=3000)
	        user_input, end_time = my_keyboard.get_key()
	        
	        my_canvas = Canvas(exp)
	        my_canvas.text(user_input)
	        my_canvas.show()
	        
	        if not new_ascending_presentation:
	            if amp in attempts:
	                attempts[amp] +=1
	            else:
	                attempts[amp] =1
	        if user_input == "y":
	            if not new_ascending_presentation:
	                if amp in hits:
	                    hits[amp] += 1
	                else:
	                    hits[amp] = 1
	            prev_hit = True
	            amp -= 10
	            new_ascending_presentation = True
	        else:
	            if amp not in hits:
	                hits[amp] = 0
	            amp += 5
	            new_ascending_presentation = False
	        if amp not in attempts:
	            attempts[amp] = 0
	            
	            
	            
	        #wait between presentations 2 seconds +- 1 second
	       
	        random_wait = random.randint(2000, 4000)
	        clock.sleep(random_wait)
	        
	        # print(attempts)
	        # print(hits)
	        
	        # print("prev_hit",prev_hit)
	        # print("hits",hits)
	        # print("attempts",attempts)
	        # if(prev_hit):
	        #     print(prev_hit and attempts[amp+10] < 3)
	        #     print(prev_hit and attempts[amp+10] >= 3 and hits[amp+10] / attempts[amp+10] < .5)
	        # else:
	        #     print(not prev_hit and attempts[amp-5] < 3)
	        #     print(not prev_hit and attempts[amp-5] >= 3 and hits[amp-5] / attempts[amp-5] < .5)
	    if prev_hit:
	        scores[str(freq)+"hz"] = str(amp+10)+"db"
	    else:
	        scores[str(freq)+"hz"] = str(amp-5)+"db"
	    print(scores)
	    
	    
	# print(scores)
	log.write(scores)
	
	
	    
	
	       
	__end__
	set _prepare ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=-8 y=-32 z_index=0

